#
#	P H A N T O M
#

# Create the attenuating volume/phantom

/gate/world/daughters/name 					Phantom
/gate/world/daughters/insert 				cylinder
/gate/Phantom/geometry/setRmax 				18 mm
/gate/Phantom/geometry/setRmin 				13 mm
/gate/Phantom/geometry/setHeight 			60. mm
/gate/Phantom/placement/setTranslation 		0.0 0.0 0.0 mm
/gate/Phantom/setMaterial 					Water
/gate/Phantom/vis/setColor 					blue
#/gate/Phantom/vis/forceWireframe
/gate/Phantom/vis/forceSolid
/gate/Phantom/vis/setVisible				1

# SOURCE
# Create the source volume/phantom

/gate/world/daughters/name 					source_vol
/gate/world/daughters/insert 				cylinder
/gate/source_vol/geometry/setRmax 			3.0  mm
/gate/source_vol/geometry/setRmin 			0.0 mm
/gate/source_vol/geometry/setHeight 		30.0 mm
/gate/source_vol/placement/setTranslation 	0.0 0.0 0.0 mm
/gate/source_vol/setMaterial 				Water
/gate/source_vol/vis/setColor 				white
#/gate/source_vol/vis/forceWireframe
/gate/source_vol/vis/forceSolid
/gate/source_vol/vis/setVisible				1

/gate/Phantom/attachPhantomSD
/gate/source_vol/attachPhantomSD


