#
#	S O U R C E S
#

# source: defining 3 spherical gamma sources 

/gate/source/addSource 						GammaSource
/gate/source/GammaSource/gps/type			Volume
/gate/source/GammaSource/gps/shape			Sphere
/gate/source/GammaSource/gps/radius			2.0 mm
/gate/source/GammaSource/gps/centre 		0. 0. 0. cm
/gate/source/GammaSource/gps/particle		gamma
/gate/source/GammaSource/gps/energytype 	Mono
/gate/source/GammaSource/gps/monoenergy 	{SourceEnergy}
/gate/source/GammaSource/setActivity 		{SourceActivity}
/gate/source/GammaSource/gps/angtype		iso
/gate/source/GammaSource/gps/mintheta		60. deg
/gate/source/GammaSource/gps/maxtheta 		120. deg
/gate/source/GammaSource/gps/minphi 		150. deg
/gate/source/GammaSource/gps/maxphi 		210. deg

/gate/source/addSource 						GammaSource2
/gate/source/GammaSource2/gps/type			Volume
/gate/source/GammaSource2/gps/shape			Sphere
/gate/source/GammaSource2/gps/radius		2.0 mm
/gate/source/GammaSource2/gps/centre 		0. 0. 5. cm
/gate/source/GammaSource2/gps/particle		gamma
/gate/source/GammaSource2/gps/energytype 	Mono
/gate/source/GammaSource2/gps/monoenergy 	{SourceEnergy}
/gate/source/GammaSource2/setActivity 		{SourceActivity}
/gate/source/GammaSource2/gps/angtype		iso
/gate/source/GammaSource2/gps/mintheta		60. deg
/gate/source/GammaSource2/gps/maxtheta 		120. deg
/gate/source/GammaSource2/gps/minphi 		150. deg
/gate/source/GammaSource2/gps/maxphi 		210. deg

/gate/source/addSource 						GammaSource3
/gate/source/GammaSource3/gps/type			Volume
/gate/source/GammaSource3/gps/shape			Sphere
/gate/source/GammaSource3/gps/radius		2.0 mm
/gate/source/GammaSource3/gps/centre 		0. 0. -5. cm
/gate/source/GammaSource3/gps/particle		gamma
/gate/source/GammaSource3/gps/energytype 	Mono
/gate/source/GammaSource3/gps/monoenergy 	{SourceEnergy}
/gate/source/GammaSource3/setActivity 		{SourceActivity}
/gate/source/GammaSource3/gps/angtype		iso
/gate/source/GammaSource3/gps/mintheta		60. deg
/gate/source/GammaSource3/gps/maxtheta 		120. deg
/gate/source/GammaSource3/gps/minphi 		150. deg
/gate/source/GammaSource3/gps/maxphi 		210. deg

/gate/source/list

/gate/source/GammaSource/gps/confine 		source_vol
/gate/source/GammaSource2/gps/confine 		source_vol
/gate/source/GammaSource3/gps/confine 		source_vol
