#
#       P H Y S I C S
#
/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess PositronAnnihilation

#/gate/physics/addProcess MultipleScattering e+
#/gate/physics/addProcess MultipleScattering e-
/gate/physics/addProcess eMultipleScattering e+
/gate/physics/addProcess eMultipleScattering e-


#for ion source
/gate/physics/addProcess RadioactiveDecay

#/gate/physics/processList Enabled
#/gate/physics/processList Initialized

#
#       C U T S
#
/gate/physics/Gamma/SetCutInRegion      SPECThead 0.1 cm
/gate/physics/Electron/SetCutInRegion   SPECThead 1.0 cm
